PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = PaperFolding_V4.1
  logging level = debug
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Routines
  Routine intermission
    TextComponent stop
      color = black
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = STOP!
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    TextComponent start_part2
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished Part I.

        When you are instructed to begin Part II, press the space bar to continue.

        You will again have 3 minutes to finish Part II.
    KeyboardComponent key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent respbeforetrial2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When you’re ready to begin, press the space bar to start.
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    CodeComponent code_intermission
      Code Type = Auto->JS
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      End Routine:
        myClock = core.Clock()
  Routine sample
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','A','b','B','c','C','d','D','e','E'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
    TextComponent thankyou
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You have now completed the experiment.

        Thank you for your participation!
    KeyboardComponent final
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent finalslide
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to exit the experiment.
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  Routine samptrial
    ImageComponent image_2
      image = sample_task/sample.png
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine instr_pt2
    TextComponent Instr_part2
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Soon, you will be given an example problem in which one hole has been punched through the folded paper. 
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent response3
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine title
    TextComponent titlecard
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Paper Folding Experiment
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent response
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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  Routine sample_instr
    TextComponent sample_text
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, .08)
      startVal [time (s)] = 0
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      text:
        Now try the sample problem on the next slide.

        Once you’ve decide which one of these figures has the correct placement of the holes, press the number (1, 2, 3, 4, or 5) on your keyboard that you feel corresponds with the correct answer.
    KeyboardComponent instruction
      allowedKeys = 'space'
      correctAns = C
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    ImageComponent keyboard_image
      image = sample_task_V2/keyboard.png
      pos = (0, -.18)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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  Routine sample_trial
    ImageComponent sample_image
      image = sample_trial.png
      size = (1.4, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent sample_resp
      allowedKeys = '1','2','3','4','5'
      correctAns = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent sample_txt
      font = Times New Roman
      letterHeight = 0.038
      pos = (0, -0.36)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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  Routine test_trial1
    ImageComponent Questions_1
      image [set every repeat] = $ImageFile
      size = (1.6, 0.22)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_1
      allowedKeys [set every repeat] = '1','2','3','4','5'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent resptrial1
      font = Times New Roman
      letterHeight = 0.038
      pos = (0, -0.36)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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    CodeComponent part1code
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        #Setting Clock
        if not countdownStarted:
            countdownClock = core.CountdownTimer(180.0)
            countdownStarted = True
      Each Frame:
        #Establishing and Displaying Timer
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.00:
            continueRoutine = False
            trials.finished = True
            countdownStarted = False
            continueExperiment = True
        else:
            minutes = int (timeRemaining/60.00)
            seconds = int (timeRemaining - (minutes*60.00))
            timeText = str(minutes) + ':'  + str(seconds)
  Routine test_trial2
    ImageComponent Questions_2
      image [set every repeat] = $ImageFile
      size = (1.6, 0.22)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_2
      allowedKeys [set every repeat] = '1','2','3','4','5'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent number
      font = Times New Roman
      letterHeight = 0.038
      pos = (0, -0.36)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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    CodeComponent part2code
      Code Type = Auto->JS
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      Each Frame:
        ##Creating Clock
        #timeRemaining = countdownClock.getTime()
        #if timeRemaining <=0.00:
        #    continueRoutine = False
        #    trials2.finished = True
        #    countdownStarted = False
        #    continueExperiment = True
        #else:
        #    minutes = int (timeRemaining/60.00)
        #    seconds = int (timeRemaining - (minutes*60.00))
        #    timeText = str(minutes) + ':'  + str(seconds)

        threshold = 180
        time = myClock.getTime()

        if time > threshold:
            continueRoutine = False
  Routine instr
    ImageComponent instr_slides
      image [set every repeat] = $'paperfolding_instr/Slide' + str(slideN) + '.png'
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        slideN = 1

        maxSlideN = 5
        minSlideN = 1
      End Routine:
        if instr_resp.keys == 'left':
            slideN -= 1
        elif instr_resp.keys == 'right':
            slideN += 1
        elif instr_resp.keys == 'space':
            if slideN == maxSlideN:
                instr_images.finished = True

        if slideN > maxSlideN:
            slideN = maxSlideN
        if slideN < minSlideN:
            slideN = minSlideN
  Routine post_sample_instr
    ImageComponent post_instr_slides
      image [set every repeat] = $'paperfolding_post_instr/Slide' + str(postslideN) + '.png'
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent post_instr_resp
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent post_instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        postslideN = 1

        postmaxSlideN = 6
        minSlideN = 1
      End Routine:
        if post_instr_resp.keys == 'left':
            postslideN -= 1
        elif post_instr_resp.keys == 'right':
            postslideN += 1
        elif post_instr_resp.keys == 'space':
            if postslideN == postmaxSlideN:
                post_sample_instr_images.finished = True

        if postslideN > postmaxSlideN:
            postslideN = postmaxSlideN
        if postslideN < minSlideN:
            postslideN = minSlideN
Flow
  LoopInitiator instr_images loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1000
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    Routine instr
  LoopTerminator instr_images
  Routine sample_trial
  LoopInitiator post_sample_instr_images loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1000
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    Routine post_sample_instr
  LoopTerminator post_sample_instr_images
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images_and_corrAns_Part_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ImageFile': 'paperfolding_stim_1/q1.png', 'corrAns': 1},
      {'ImageFile': 'paperfolding_stim_1/q2.png', 'corrAns': 4},
      {'ImageFile': 'paperfolding_stim_1/q3.png', 'corrAns': 2},
      {'ImageFile': 'paperfolding_stim_1/q4.png', 'corrAns': 4},
      {'ImageFile': 'paperfolding_stim_1/q5.png', 'corrAns': 2},
      {'ImageFile': 'paperfolding_stim_1/q6.png', 'corrAns': 5},
      {'ImageFile': 'paperfolding_stim_1/q7.png', 'corrAns': 1},
      {'ImageFile': 'paperfolding_stim_1/q8.png', 'corrAns': 3},
      {'ImageFile': 'paperfolding_stim_1/q9.png', 'corrAns': 5},
      {'ImageFile': 'paperfolding_stim_1/q10.png', 'corrAns': 5}]
    Routine test_trial1
  LoopTerminator trials
  Routine intermission
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Images_and_corrAns_Part_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ImageFile': 'paperfolding_stim_2/q11.png', 'corrAns': 3},
      {'ImageFile': 'paperfolding_stim_2/q12.png', 'corrAns': 2},
      {'ImageFile': 'paperfolding_stim_2/q13.png', 'corrAns': 1},
      {'ImageFile': 'paperfolding_stim_2/q14.png', 'corrAns': 5},
      {'ImageFile': 'paperfolding_stim_2/q15.png', 'corrAns': 2},
      {'ImageFile': 'paperfolding_stim_2/q16.png', 'corrAns': 1},
      {'ImageFile': 'paperfolding_stim_2/q17.png', 'corrAns': 5},
      {'ImageFile': 'paperfolding_stim_2/q18.png', 'corrAns': 4},
      {'ImageFile': 'paperfolding_stim_2/q19.png', 'corrAns': 4},
      {'ImageFile': 'paperfolding_stim_2/q20.png', 'corrAns': 3}]
    Routine test_trial2
  LoopTerminator trials_2
  Routine end
